OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Training Phase
Comment
  External Stimulator

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.

  The stimulator accepts two keyboard commands:

  Pressing <Space> will send a start
  stimulation to the scenario and the experiment will
  begin.

  Pressing <Escape> will quit the
  stimulator and stop the scenario.
Comment
  Configurable box
Comment
  SSVEP Training Controller

  SSVEP scenario for the training phase,
  a marker points at the target  the user has to look at.
  A prescribe sequence of stimuli is shown to the user.
  Stimulation duration, break duration  and flickering delay can be changed.

  For Target Position and Target Size check "trainer" file and
  please make sure that it has the following path:
  C:\Users\User\Desktop\openvibe\share\openvibe\applications\ssvep-demo
Comment
  GDF file writer
  Output file in GDF format with EEG signal and markers
Comment
  Generic stream writer
  Output file in OV format with EEG signal and markers

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 1 -> 0xc67a01dc SSVEP Training Controller => #1
  Lua Script = ${Player_ScenarioDirectory}/scripts/training-acquisition-controller.lua
  Goal sequence = 1     2     1     2     1     1     2     1      1     2     1     1     2     2     1     2     2      1     2     1     2     1     2     1     2     2     1     2     1     2     2     2     1     2  1     1     2     1     2    1
  Stimulation duration = 4
  Break duration = 2
  Flickering delay = 1.000000
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0)
Input stimulations 1=#1.Stimulations, Input stimulations 2=#1.New output -> Stimulation multiplexer => #2
#1.Stimulations -> Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#1.New output -> Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Acquisition client => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#7.Experiment information, Signal=#7.Signal stream, Stimulation=#2 -> GDF file writer
  Filename = C:\Users\HP\Desktop\PhD\IEEEbrain_SummerSchool\BYB\Data
Input stream 1=#7.Experiment information, Input stream 2=#7.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
